PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = HABLA_sentence_D
  exportHTML = manually
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine proseRecord
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    MicrophoneComponent mic
      channels = mono
      device = default
      maxSize = 480000
      outputType = wav
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Built-in
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent stimulitop
      letterHeight = 0.1
      pos = (0, .13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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      text [set every repeat]:
        $S1
    TextComponent stimulicenter
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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      text [set every repeat]:
        $S2
    TextComponent stimulidown
      letterHeight = 0.1
      pos = (0,-.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
      text [set every repeat] = $S3
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    TextboxComponent prosePrompt
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.1
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $token
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    PolygonComponent timer
      disabled = True
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/5*2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 2.4
      stopVal [duration (s)] = 3.6
      text = +
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  Routine begin
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    TextComponent text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
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    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Has terminado este ejercicio,
        ¡Muchas gracias por tu atención!
  Routine tr
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    PolygonComponent timer_2
      disabled = True
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/10, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24
      text = +
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Flow
  Routine begin
  Routine tr
  LoopInitiator Syllable loopType="TrialHandler"
    conditionsFile = 4BalancedSentenceSequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('elementType', 6), ('S1', 'Ese pavo'), ('S2', 'tenía una'), ('S3', 'piel crujiente')]),
      OrderedDict([('elementType', 3), ('S1', 'Esa ficha'), ('S2', 'de ajedrez'), ('S3', 'se movió')]),
      OrderedDict([('elementType', 2), ('S1', 'xx xxxx'), ('S2', 'xx xxxxxxxx'), ('S3', 'xxxx xxxxxxx')]),
      OrderedDict([('elementType', 3), ('S1', 'La funda'), ('S2', 'del móvil'), ('S3', 'se extravió')]),
      OrderedDict([('elementType', 7), ('S1', 'Esa boina'), ('S2', 'negra le'), ('S3', 'va bien')]),
      OrderedDict([('elementType', 3), ('S1', 'Esa fondúe'), ('S2', 'de frutas'), ('S3', 'es exquisita')]),
      OrderedDict([('elementType', 4), ('S1', 'El martillo'), ('S2', 'está sobre'), ('S3', 'la mesa')]),
      OrderedDict([('elementType', 2), ('S1', 'xx xxxx'), ('S2', 'xx xxxxxxx'), ('S3', 'xxxx xxxxx')]),
      OrderedDict([('elementType', 6), ('S1', 'Ese pincel'), ('S2', 'ancho cubre'), ('S3', 'más área')]),
      OrderedDict([('elementType', 6), ('S1', 'Este palillo'), ('S2', 'chino es'), ('S3', 'muy delgado')]),
      OrderedDict([('elementType', 4), ('S1', 'Este muñeco'), ('S2', 'de porcelana'), ('S3', 'es frágil')]),
      OrderedDict([('elementType', 7), ('S1', 'El vinagre'), ('S2', 'balsámico es'), ('S3', 'muy sabroso')]),
      OrderedDict([('elementType', 1), ('S1', 'Esta salchicha'), ('S2', 'italiana tiene'), ('S3', 'mucho sabor')]),
      OrderedDict([('elementType', 2), ('S1', 'xx xxxx'), ('S2', 'xx xxxxxxxx'), ('S3', 'xxxx xxxxxxx')]),
      OrderedDict([('elementType', 1), ('S1', 'El sello'), ('S2', 'del frasco'), ('S3', 'está roto')])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
    Routine proseRecord
  LoopTerminator Syllable
  Routine end
