PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = HABLA_syllable_A
  exportHTML = manually
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine proseRecord
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    MicrophoneComponent mic
      channels = mono
      device = default
      maxSize = 480000
      outputType = wav
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Built-in
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent stimuli
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
      text [set every repeat] = $token
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    TextboxComponent prosePrompt
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.1
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $token
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    PolygonComponent timer
      disabled = True
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/5*2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 2.4
      stopVal [duration (s)] = 3.6
      text = +
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  Routine begin
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    TextComponent text
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
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    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Has terminado este ejercicio,
        ¡Muchas gracias por tu atención!
  Routine tr
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    PolygonComponent timer_2
      disabled = True
      fillColor = white
      pos = (-1, -1)
      shape = custom polygon...
      size [set every frame] = (t/10, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = norm
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    TextComponent text_2
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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Flow
  Routine begin
  Routine tr
  LoopInitiator Syllable loopType="TrialHandler"
    conditionsFile = 1BalancedSyllableSequence.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('elementType', 6), ('token', 'sa')]),
      OrderedDict([('elementType', 3), ('token', 'ma')]),
      OrderedDict([('elementType', 2), ('token', 'fe')]),
      OrderedDict([('elementType', 3), ('token', 'ma')]),
      OrderedDict([('elementType', 7), ('token', 'bi')]),
      OrderedDict([('elementType', 3), ('token', 'me')]),
      OrderedDict([('elementType', 4), ('token', 'ni')]),
      OrderedDict([('elementType', 2), ('token', 'fa')]),
      OrderedDict([('elementType', 6), ('token', 'se')]),
      OrderedDict([('elementType', 6), ('token', 'su')]),
      OrderedDict([('elementType', 4), ('token', 'ne')]),
      OrderedDict([('elementType', 7), ('token', 'be')]),
      OrderedDict([('elementType', 1), ('token', 'xx')]),
      OrderedDict([('elementType', 2), ('token', 'fi')]),
      OrderedDict([('elementType', 1), ('token', 'xx')]),
      OrderedDict([('elementType', 3), ('token', 'mi')]),
      OrderedDict([('elementType', 4), ('token', 'ne')]),
      OrderedDict([('elementType', 5), ('token', 'pi')]),
      OrderedDict([('elementType', 3), ('token', 'mu')]),
      OrderedDict([('elementType', 5), ('token', 'pe')]),
      OrderedDict([('elementType', 6), ('token', 'su')]),
      OrderedDict([('elementType', 1), ('token', 'xx')]),
      OrderedDict([('elementType', 7), ('token', 'bo')]),
      OrderedDict([('elementType', 7), ('token', 'bu')]),
      OrderedDict([('elementType', 3), ('token', 'mu')]),
      OrderedDict([('elementType', 6), ('token', 'sa')]),
      OrderedDict([('elementType', 7), ('token', 'bo')]),
      OrderedDict([('elementType', 6), ('token', 'si')]),
      OrderedDict([('elementType', 2), ('token', 'fu')])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
    Routine proseRecord
  LoopTerminator Syllable
  Routine end
